global:
  startup_modules: []
  remote_modules_server:
    address: localhost
    port: 12345
    certfile: null
    keyfile: null
  namespace_server_port: 18861
  force_remote_calls_by_value: true
  stylesheet: qdark.qss
  daily_data_dirs: true
  hide_manager_window: false
  default_data_dir: null
  extension_paths: []

gui:
    camera_gui:
        module.Class: 'camera.cameragui.CameraGui'
        connect:
            camera_logic: camera_logic

logic:
    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            camera: 'thor_camera'

hardware:

  thor_camera:
    module.Class: camera.thorlabs.thorlabs_DCx.CameraThorlabs
    allow_remote: false
    connect: {}
    options: {}

  kinesis_motor:
    module.Class: motor.kinesis_motor.KinesisStage
    allow_remote: false
    connect: {}
    options: {}
